CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Image
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Image
    Name the output image:Illum_Image
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Image
    Name the output image:Corr_Image
    Select the illumination function:Illum_Image
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:Corr_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Image
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\360MoveData\\Users\\Haofei Ge\\Desktop\\该读书了\\细胞周期伪时间课题（毕业论文版）\\活细胞与伪时间的验证数据\\伪时间处理\\preprocess\\IlluminationCorrect
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
