CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:Rescale_DNA
    Rescaling method:Stretch each image to use the full intensity range
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
RunCellpose:[module_num:6|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
    Select the input image:Rescale_DNA
    Expected object diameter:12
    Detection mode:cyto2
    Name the output object:Cellpose_DNA
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.8
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:3
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescale_DNA
    Name the output image:Overlay_DNA
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF8040
    Select objects to display:Cellpose_DNA

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Rescale_DNA
    Select objects to measure:Cellpose_DNA

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Cellpose_DNA
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:Overlay_DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|D:\\360MoveData\\Users\\Haofei Ge\\Desktop\\该读书了\\细胞周期伪时间课题（毕业论文版）\\活细胞与伪时间的验证数据\\伪时间处理\\PseudoTime\\SaveImage
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\360MoveData\\Users\\Haofei Ge\\Desktop\\该读书了\\细胞周期伪时间课题（毕业论文版）\\活细胞与伪时间的验证数据\\伪时间处理\\PseudoTime
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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